CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:41
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Slide>.*).czi
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".czi")
    Name to assign these images:tissues
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Start of suite of modules for spot and cell processing', 'If doing on a cropped image- use “CroppedTissues” as the input image; if doing on an uncropped image, use “tissues”']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
    Select the input image:tissues
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Channel1
    Channel number:2
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    Image name:Channel2
    Channel number:3
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    Image name:Channel3
    Channel number:4
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    Image name:Channel4

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Channel2
    Name the output image:illum_ch2
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:Channel2
    Name the output image:Corr_ch2
    Select the illumination function:illum_ch2
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Corr_ch2
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.00,1.0
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    Lower outlier fraction:0.02
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Median absolute deviation
    # of deviations:2
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Channel2
    Number of pixels by which to expand the primary objects:7
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Channel1
    Name the primary objects to be identified:ch1_spots_removed
    Typical diameter of objects, in pixel units (Min,Max):5,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:13
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.00,1.0
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    Lower outlier fraction:0.00
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Channel3
    Name the primary objects to be identified:ch3_spots_removed
    Typical diameter of objects, in pixel units (Min,Max):5,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:13
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.00,1.0
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    Lower outlier fraction:0.00
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:5
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Channel4
    Name the primary objects to be identified:ch4_spots_removed
    Typical diameter of objects, in pixel units (Min,Max):10,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:13
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.00,1.0
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    Lower outlier fraction:0.00
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:Channel1
    Name the output image:Enhance_ch1
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast

EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:Channel3
    Name the output image:Enhance_ch3
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast

EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Channel4
    Name the output image:Enhance_ch4
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast

MaskImage:[module_num:16|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
    Select the input image:Enhance_ch1
    Name the output image:Mask_ch1
    Use objects or an image as a mask?:Objects
    Select object for mask:ch1_spots_removed
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    Invert the mask?:Yes

MaskImage:[module_num:17|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
    Select the input image:Enhance_ch3
    Name the output image:Mask_ch3
    Use objects or an image as a mask?:Objects
    Select object for mask:ch3_spots_removed
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    Invert the mask?:Yes

MaskImage:[module_num:18|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
    Select the input image:Enhance_ch4
    Name the output image:Mask_ch4
    Use objects or an image as a mask?:Objects
    Select object for mask:ch4_spots_removed
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:Mask_ch1
    Name the primary objects to be identified:ch1_spots
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:1.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

OverlayOutlines:[module_num:20|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Channel1
    Name the output image:overlay_ch1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ch1_spots

IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:Mask_ch3
    Name the primary objects to be identified:ch3_spots
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

OverlayOutlines:[module_num:22|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Channel3
    Name the output image:overlay_ch3
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#2DFF19
    Select objects to display:ch3_spots

IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:Mask_ch4
    Name the primary objects to be identified:ch4_spots
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

OverlayOutlines:[module_num:24|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Channel4
    Name the output image:overlay_ch3
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#1D17F3
    Select objects to display:ch4_spots

MeasureObjectIntensity:[module_num:25|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
    Hidden:3
    Select an image to measure:Channel1
    Select an image to measure:Channel3
    Select an image to measure:Channel4
    Select objects to measure:ch1_spots
    Select objects to measure:ch3_spots
    Select objects to measure:ch4_spots

MaskObjects:[module_num:26|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
    Select objects to be masked:ch1_spots
    Name the masked objects:Mask_ch_1_3
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ch3_spots
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:27|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
    Select objects to be masked:Mask_ch_1_3
    Name the masked objects:Spots_ch1_identified
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ch4_spots
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:28|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
    Select objects to be masked:ch3_spots
    Name the masked objects:Mask_ch_3_1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ch1_spots
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:29|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
    Select objects to be masked:Mask_ch_3_1
    Name the masked objects:Spots_ch3_identified
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ch4_spots
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:30|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
    Select objects to be masked:ch4_spots
    Name the masked objects:Mask_ch4_1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ch1_spots
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:31|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
    Select objects to be masked:Mask_ch4_1
    Name the masked objects:Spots_ch4_identified
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ch3_spots
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:32|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:ch1_spots
    Select objects to measure:ch3_spots
    Select objects to measure:ch4_spots
    Select objects to measure:Spots_ch1_identified
    Select objects to measure:Spots_ch3_identified
    Select objects to measure:Spots_ch4_identified
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:33|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Channel2
    Name the output image:Cells_spots_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Spots_ch1_identified
    Select outline color:Green
    Select objects to display:Spots_ch3_identified
    Select outline color:Blue
    Select objects to display:Spots_ch4_identified
    Select outline color:#FF00CD
    Select objects to display:Cells

SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:Cells_spots_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:tissues
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectNeighbors:[module_num:35|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:36|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:37|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
    Parent objects:Cells
    Child objects:Spots_ch1_identified
    Name the output object:Cells_spots_ch1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:38|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
    Parent objects:Cells
    Child objects:Spots_ch3_identified
    Name the output object:Cells_spots_ch3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:39|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
    Parent objects:Cells
    Child objects:Spots_ch4_identified
    Name the output object:Cells_spots_ch4
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ExportToDatabase:[module_num:40|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:41|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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